PsychoPy2experiment version="2022.1.4"
Settings
  Data filename = f"data/sub-{expInfo['sub']}/sub-{expInfo['sub']}_{expName}"
  Experiment info = {'sub': '01', 'record_screen': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = task-browraiser
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Press enter to start!
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    KeyboardComponent welcome_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent webcam
      Code Type = Py
      Begin Experiment:
        import cv2
        import pandas as pd

        ft_df = pd.DataFrame(columns=['t', 'trial_type'])
        ev_df = pd.DataFrame(columns=['onset', 'duration', 'trial_type'])

        cam = cv2.VideoCapture(0)
        if not cam.isOpened():
            raise ValueError("Could not open webcam!")

        width  = int(cam.get(3))
        height = int(cam.get(4))
        fps = cam.get(5)

        fourcc = cv2.VideoWriter_fourcc(*'mp4v')
        video = cv2.VideoWriter(filename + '.mp4', fourcc, fps, (width, height), True)

        def update_capture_info():

            t_before = logging.defaultClock.getTime()
            frame = cam.read()[1]
            frame = cv2.flip(frame, 1)
            t_after = logging.defaultClock.getTime()
            t = (t_before + t_after) / 2
            t_ms = int(round(t * 1000))

            video.write(frame)
            ft_df = ft_df.append({'t': t}, ignore_index=True)
      Each Frame:
        if expInfo['record_screen']:
            win.getMovieFrame(buffer='front')
      End Experiment:
        cam.release()    # stop webcam recording
        video.release()  # stop webcam capture writer

        # Save frame times to disk
        f_out = filename + '_frametimes.tsv'
        ft_df.to_csv(f_out, index=False, sep='\t')

        # Save event information to disk
        f_out = filename + '_events.tsv'
        ev_df.to_csv(f_out, index=False, sep='\t')
  Routine baseline
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    CodeComponent record_cam
      Code Type = Py
      Each Frame:
        update_capture_info()
  Routine goodbye
    TextComponent goodbye_txt
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = Goodbye!
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  Routine trial
    TextComponent trial_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $trial_type
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    TextComponent isi
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent record_cam_trial
      Code Type = Py
      Each Frame:
        update_capture_info()
      End Routine:
        onset = trial_text.tStartRefresh
        duration = logging.defaultClock.getTime() - trial_text.tStartRefresh

        ev_df = ev_df.append({'onset': onset, 'duration': duration, 'trial_type': trial_type},
                             ignore_index=True)
Flow
  Routine welcome
  Routine baseline
  LoopInitiator trial_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 10
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    Routine trial
  LoopTerminator trial_loop
  Routine baseline
  Routine goodbye
