<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2021.2.3">
  <Settings>
    <Param name="Audio latency priority" updates="None" val="use prefs" valType="str"/>
    <Param name="Audio lib" updates="None" val="use prefs" valType="str"/>
    <Param name="Completed URL" updates="None" val="" valType="str"/>
    <Param name="Data file delimiter" updates="None" val="auto" valType="str"/>
    <Param name="Data filename" updates="None" val="f&quot;data/sub-{expInfo['sub']}/sub-{expInfo['sub']}_{expName}&quot;" valType="code"/>
    <Param name="Enable Escape" updates="None" val="True" valType="bool"/>
    <Param name="Experiment info" updates="None" val="{'sub': '01'}" valType="code"/>
    <Param name="Force stereo" updates="None" val="True" valType="bool"/>
    <Param name="Full-screen window" updates="None" val="True" valType="bool"/>
    <Param name="HTML path" updates="None" val="" valType="str"/>
    <Param name="Incomplete URL" updates="None" val="" valType="str"/>
    <Param name="Monitor" updates="None" val="testMonitor" valType="str"/>
    <Param name="Resources" updates="None" val="[]" valType="list"/>
    <Param name="Save csv file" updates="None" val="False" valType="bool"/>
    <Param name="Save excel file" updates="None" val="False" valType="bool"/>
    <Param name="Save hdf5 file" updates="None" val="False" valType="bool"/>
    <Param name="Save log file" updates="None" val="False" valType="bool"/>
    <Param name="Save psydat file" updates="None" val="True" valType="bool"/>
    <Param name="Save wide csv file" updates="None" val="True" valType="bool"/>
    <Param name="Screen" updates="None" val="1" valType="num"/>
    <Param name="Show info dlg" updates="None" val="True" valType="bool"/>
    <Param name="Show mouse" updates="None" val="False" valType="bool"/>
    <Param name="Units" updates="None" val="height" valType="str"/>
    <Param name="Use version" updates="None" val="" valType="str"/>
    <Param name="Window size (pixels)" updates="None" val="[1440, 900]" valType="list"/>
    <Param name="blendMode" updates="None" val="avg" valType="str"/>
    <Param name="color" updates="None" val="$[0,0,0]" valType="color"/>
    <Param name="colorSpace" updates="None" val="rgb" valType="str"/>
    <Param name="elAddress" updates="None" val="100.1.1.1" valType="str"/>
    <Param name="elDataFiltering" updates="None" val="FILTER_LEVEL_2" valType="str"/>
    <Param name="elLiveFiltering" updates="None" val="FILTER_LEVEL_OFF" valType="str"/>
    <Param name="elModel" updates="None" val="EYELINK 1000 DESKTOP" valType="str"/>
    <Param name="elPupilAlgorithm" updates="None" val="ELLIPSE_FIT" valType="str"/>
    <Param name="elPupilMeasure" updates="None" val="PUPIL_AREA" valType="str"/>
    <Param name="elSampleRate" updates="None" val="1000" valType="num"/>
    <Param name="elSimMode" updates="None" val="False" valType="bool"/>
    <Param name="elTrackEyes" updates="None" val="RIGHT_EYE" valType="str"/>
    <Param name="elTrackingMode" updates="None" val="PUPIL_CR_TRACKING" valType="str"/>
    <Param name="expName" updates="None" val="task-browraiser" valType="str"/>
    <Param name="exportHTML" updates="None" val="on Sync" valType="str"/>
    <Param name="eyetracker" updates="None" val="None" valType="str"/>
    <Param name="gpAddress" updates="None" val="127.0.0.1" valType="str"/>
    <Param name="gpPort" updates="None" val="4242" valType="num"/>
    <Param name="logging level" updates="None" val="exp" valType="code"/>
    <Param name="mgBlink" updates="None" val="('MIDDLE_BUTTON',)" valType="list"/>
    <Param name="mgMove" updates="None" val="CONTINUOUS" valType="str"/>
    <Param name="mgSaccade" updates="None" val="0.5" valType="num"/>
    <Param name="tbLicenseFile" updates="None" val="" valType="str"/>
    <Param name="tbModel" updates="None" val="" valType="str"/>
    <Param name="tbSampleRate" updates="None" val="60" valType="num"/>
    <Param name="tbSerialNo" updates="None" val="" valType="str"/>
  </Settings>
  <Routines>
    <Routine name="welcome">
      <TextComponent name="welcome_text">
        <Param name="color" updates="constant" val="white" valType="color"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="contrast" updates="constant" val="1" valType="num"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="flip" updates="constant" val="None" valType="str"/>
        <Param name="font" updates="constant" val="Open Sans" valType="str"/>
        <Param name="languageStyle" updates="None" val="LTR" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="num"/>
        <Param name="name" updates="None" val="welcome_text" valType="code"/>
        <Param name="opacity" updates="constant" val="" valType="num"/>
        <Param name="ori" updates="constant" val="0" valType="num"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="list"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="text" updates="constant" val="Press enter to start!" valType="str"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="wrapWidth" updates="constant" val="" valType="num"/>
      </TextComponent>
      <KeyboardComponent name="welcome_resp">
        <Param name="allowedKeys" updates="constant" val="'return'" valType="list"/>
        <Param name="correctAns" updates="constant" val="" valType="str"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="discard previous" updates="constant" val="True" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="forceEndRoutine" updates="constant" val="True" valType="bool"/>
        <Param name="name" updates="None" val="welcome_resp" valType="code"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="" valType="code"/>
        <Param name="store" updates="constant" val="last key" valType="str"/>
        <Param name="storeCorrect" updates="constant" val="False" valType="bool"/>
        <Param name="syncScreenRefresh" updates="constant" val="True" valType="bool"/>
      </KeyboardComponent>
      <CodeComponent name="init_webcam">
        <Param name="Before Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Before JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin Experiment" updates="constant" val="import cv2&amp;#10;import pandas as pd&amp;#10;import os.path as op&amp;#10;from glob import glob&amp;#10;&amp;#10;out_dir = op.join('data', 'sub-' + expInfo['sub'])&amp;#10;if not op.isdir(out_dir):&amp;#10;    os.makedirs(out_dir, exist_ok=True)&amp;#10;else:&amp;#10;    [os.remove(f) for f in glob(op.join(out_dir, '*'))]&amp;#10;&amp;#10;ft_df = pd.DataFrame(columns=['t', 'trial_type'])&amp;#10;ev_df = pd.DataFrame(columns=['onset', 'duration', 'trial_type'])&amp;#10;&amp;#10;cap = cv2.VideoCapture(0)&amp;#10;&amp;#10;if not cap.isOpened():&amp;#10;    raise ValueError(&quot;Could not open webcam!&quot;)" valType="extendedCode"/>
        <Param name="Begin JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="Code Type" updates="None" val="Py" valType="str"/>
        <Param name="Each Frame" updates="constant" val="" valType="extendedCode"/>
        <Param name="Each JS Frame" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Experiment" updates="constant" val="cap.release()&amp;#10;" valType="extendedCode"/>
        <Param name="End JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="name" updates="None" val="init_webcam" valType="code"/>
      </CodeComponent>
    </Routine>
    <Routine name="baseline">
      <TextComponent name="fix">
        <Param name="color" updates="constant" val="white" valType="color"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="contrast" updates="constant" val="1" valType="num"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="flip" updates="constant" val="None" valType="str"/>
        <Param name="font" updates="constant" val="Open Sans" valType="str"/>
        <Param name="languageStyle" updates="None" val="LTR" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="num"/>
        <Param name="name" updates="None" val="fix" valType="code"/>
        <Param name="opacity" updates="constant" val="" valType="num"/>
        <Param name="ori" updates="constant" val="0" valType="num"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="list"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="1" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="text" updates="constant" val="+" valType="str"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="wrapWidth" updates="constant" val="" valType="num"/>
      </TextComponent>
      <CodeComponent name="record_cam">
        <Param name="Before Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Before JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="Code Type" updates="None" val="Py" valType="str"/>
        <Param name="Each Frame" updates="constant" val="t_before = logging.defaultClock.getTime()&amp;#10;ret, frame = cap.read()&amp;#10;t_after = logging.defaultClock.getTime()&amp;#10;t = (t_before + t_after) / 2&amp;#10;&amp;#10;if not ret:&amp;#10;    raise ValueError(&quot;Could not read image from webcam!&quot;)&amp;#10;&amp;#10;t_ms = int(round(t * 1000))&amp;#10;f_out = op.join(out_dir, f&quot;sub-{expInfo['sub']}_{expName}_t-{t_ms}.jpg&quot;)&amp;#10;cv2.imwrite(f_out, frame)&amp;#10;ft_df = ft_df.append({'t': t}, ignore_index=True)" valType="extendedCode"/>
        <Param name="Each JS Frame" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="name" updates="None" val="record_cam" valType="code"/>
      </CodeComponent>
    </Routine>
    <Routine name="goodbye">
      <TextComponent name="goodbye_txt">
        <Param name="color" updates="constant" val="white" valType="color"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="contrast" updates="constant" val="1" valType="num"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="flip" updates="constant" val="None" valType="str"/>
        <Param name="font" updates="constant" val="Open Sans" valType="str"/>
        <Param name="languageStyle" updates="None" val="LTR" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="num"/>
        <Param name="name" updates="None" val="goodbye_txt" valType="code"/>
        <Param name="opacity" updates="constant" val="" valType="num"/>
        <Param name="ori" updates="constant" val="0" valType="num"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="list"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="1" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="text" updates="constant" val="Goodbye!" valType="str"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="wrapWidth" updates="constant" val="" valType="num"/>
      </TextComponent>
      <CodeComponent name="save_data">
        <Param name="Before Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Before JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Routine" updates="constant" val="cap.rea;&amp;#10;" valType="extendedCode"/>
        <Param name="Begin Routine" updates="constant" val="cap.release()&amp;#10;&amp;#10;f_out = op.join(out_dir, f&quot;sub-{expInfo['sub']}_{expName}_frametimes.tsv&quot;)&amp;#10;ft_df.to_csv(f_out, index=False, sep='\t')&amp;#10;&amp;#10;f_out = op.join(out_dir, f&quot;sub-{expInfo['sub']}_{expName}_events.tsv&quot;)&amp;#10;ev_df.to_csv(f_out, index=False, sep='\t')&amp;#10;&amp;#10;f_out = op.join(out_dir, f&quot;sub-{expInfo['sub']}_{expName}_video.mp4&quot;)&amp;#10;if os.path.isfile(f_out):&amp;#10;    os.remove(f_out)&amp;#10;&amp;#10;images = sorted(glob(op.join(out_dir, f&quot;sub-{expInfo['sub']}_{expName}_t-*.jpg&quot;)))&amp;#10;frame = cv2.imread(images[0])&amp;#10;height, width, layers = frame.shape&amp;#10;&amp;#10;fps = round(1 / np.diff(ft_df['t'].to_numpy()).mean(), 1)&amp;#10;fourcc = cv2.VideoWriter_fourcc(*'mp4v')&amp;#10;video = cv2.VideoWriter(f_out, fourcc, fps, (width, height))&amp;#10;&amp;#10;for image in images:&amp;#10;    video.write(cv2.imread(image))&amp;#10;    os.remove(image)" valType="extendedCode"/>
        <Param name="Code Type" updates="None" val="Py" valType="str"/>
        <Param name="Each Frame" updates="constant" val="" valType="extendedCode"/>
        <Param name="Each JS Frame" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="name" updates="None" val="save_data" valType="code"/>
      </CodeComponent>
    </Routine>
    <Routine name="trial">
      <CodeComponent name="record_cam_trial">
        <Param name="Before Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Before JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin JS Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="Begin Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="Code Type" updates="None" val="Py" valType="str"/>
        <Param name="Each Frame" updates="constant" val="t_before = logging.defaultClock.getTime()&amp;#10;ret, frame = cap.read()&amp;#10;t_after = logging.defaultClock.getTime()&amp;#10;t_av = (t_before + t_after) / 2&amp;#10;&amp;#10;if not ret:&amp;#10;    raise ValueError(&quot;Could not read image from webcam!&quot;)&amp;#10;&amp;#10;t_av_ms = int(round(t_av * 1000))&amp;#10;f_out = op.join(out_dir, f&quot;sub-{expInfo['sub']}_{expName}_t-{t_av_ms}.jpg&quot;)&amp;#10;cv2.imwrite(f_out, frame)&amp;#10;&amp;#10;ft_df = ft_df.append({'t': t_av, 'trial_type': trial_type}, ignore_index=True)" valType="extendedCode"/>
        <Param name="Each JS Frame" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Experiment" updates="constant" val="" valType="extendedCode"/>
        <Param name="End JS Routine" updates="constant" val="" valType="extendedCode"/>
        <Param name="End Routine" updates="constant" val="onset = trial_text.tStartRefresh&amp;#10;duration = logging.defaultClock.getTime() - trial_text.tStartRefresh&amp;#10;&amp;#10;ev_df = ev_df.append({'onset': onset, 'duration': duration, 'trial_type': trial_type},&amp;#10;                     ignore_index=True)" valType="extendedCode"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="name" updates="None" val="record_cam_trial" valType="code"/>
      </CodeComponent>
      <TextComponent name="trial_text">
        <Param name="color" updates="constant" val="white" valType="color"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="contrast" updates="constant" val="1" valType="num"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="flip" updates="constant" val="None" valType="str"/>
        <Param name="font" updates="constant" val="Open Sans" valType="str"/>
        <Param name="languageStyle" updates="None" val="LTR" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="num"/>
        <Param name="name" updates="None" val="trial_text" valType="code"/>
        <Param name="opacity" updates="constant" val="" valType="num"/>
        <Param name="ori" updates="constant" val="0" valType="num"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="list"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="0.0" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="2" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="text" updates="set every repeat" val="$trial_type" valType="str"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="wrapWidth" updates="constant" val="" valType="num"/>
      </TextComponent>
      <TextComponent name="isi">
        <Param name="color" updates="constant" val="white" valType="color"/>
        <Param name="colorSpace" updates="constant" val="rgb" valType="str"/>
        <Param name="contrast" updates="constant" val="1" valType="num"/>
        <Param name="disabled" updates="None" val="False" valType="bool"/>
        <Param name="durationEstim" updates="None" val="" valType="code"/>
        <Param name="flip" updates="constant" val="None" valType="str"/>
        <Param name="font" updates="constant" val="Open Sans" valType="str"/>
        <Param name="languageStyle" updates="None" val="LTR" valType="str"/>
        <Param name="letterHeight" updates="constant" val="0.1" valType="num"/>
        <Param name="name" updates="None" val="isi" valType="code"/>
        <Param name="opacity" updates="constant" val="" valType="num"/>
        <Param name="ori" updates="constant" val="0" valType="num"/>
        <Param name="pos" updates="constant" val="(0, 0)" valType="list"/>
        <Param name="saveStartStop" updates="None" val="True" valType="bool"/>
        <Param name="startEstim" updates="None" val="" valType="code"/>
        <Param name="startType" updates="None" val="time (s)" valType="str"/>
        <Param name="startVal" updates="None" val="2" valType="code"/>
        <Param name="stopType" updates="None" val="duration (s)" valType="str"/>
        <Param name="stopVal" updates="constant" val="0.5" valType="code"/>
        <Param name="syncScreenRefresh" updates="None" val="True" valType="bool"/>
        <Param name="text" updates="constant" val="+" valType="str"/>
        <Param name="units" updates="None" val="from exp settings" valType="str"/>
        <Param name="wrapWidth" updates="constant" val="" valType="num"/>
      </TextComponent>
    </Routine>
  </Routines>
  <Flow>
    <Routine name="welcome"/>
    <Routine name="baseline"/>
    <LoopInitiator loopType="TrialHandler" name="trial_loop">
      <Param name="Selected rows" updates="None" val="" valType="str"/>
      <Param name="conditions" updates="None" val="None" valType="str"/>
      <Param name="conditionsFile" updates="None" val="conditions.csv" valType="file"/>
      <Param name="endPoints" updates="None" val="[0, 1]" valType="num"/>
      <Param name="isTrials" updates="None" val="True" valType="bool"/>
      <Param name="loopType" updates="None" val="random" valType="str"/>
      <Param name="nReps" updates="None" val="10" valType="num"/>
      <Param name="name" updates="None" val="trial_loop" valType="code"/>
      <Param name="random seed" updates="None" val="" valType="code"/>
    </LoopInitiator>
    <Routine name="trial"/>
    <LoopTerminator name="trial_loop"/>
    <Routine name="baseline"/>
    <Routine name="goodbye"/>
  </Flow>
</PsychoPy2experiment>
